PsychoPy2experiment version="2022.2.1"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Digit Span Task
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine Instructions
    TextComponent instructions
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In this task you will be required to memorise the number sequence presented.

        You will start with a list of 3 numbers. If you are able to correctly recall two out of three lists you will proceed to longer list trials.

        Type out your answer when "Recall" screen appears using the numbers at the top of the keyboard.
        If you make a mistake you can use backspace to correct it.  Do not use spaces.

        Feedback will be provided.
    ImageComponent cont_button_2
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    MouseComponent start_mouse
      clickable = cont_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Presentation
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent pres_text
      letterHeight = 0.1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits)[digitLoop.thisN]
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  Routine Recall
    TextComponent recall_txt
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.1
      size = (None, None)
      startVal [time (s)] = 0.0
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    ImageComponent cont_button
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if textbox.text == str(digits):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    MouseComponent mouse
      clickable = cont_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent JScode
      Code Type = JS
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
  Routine Feedback
    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.
        Thank you for your time.
Flow
  Routine Instructions
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = choose_digitSpan.xlsx
    isTrials = False
    loopType = sequential
    nReps = 5
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    conditions:
      [{'condition_file': 'three.xlsx'},
      {'condition_file': 'four.xlsx'},
      {'condition_file': 'five.xlsx'},
      {'condition_file': 'six.xlsx'},
      {'condition_file': 'seven.xlsx'},
      {'condition_file': 'eight.xlsx'},
      {'condition_file': 'nine.xlsx'},
      {'condition_file': 'ten.xlsx'},
      {'condition_file': 'eleven.xlsx'},
      {'condition_file': 'twelve.xlsx'}]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condition_file
      loopType = sequential
      nReps = 1
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      LoopInitiator digitLoop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = digitSpan
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        Routine Presentation
      LoopTerminator digitLoop
      Routine Recall
      Routine Feedback
    LoopTerminator trials
  LoopTerminator blocks
  Routine End
