PsychoPy2experiment version="2023.2.0"
Settings
  Completed URL = $'https://udenver.qualtrics.com/jfe/form/SV_a4qaGzutOwOjcPk?id='+expInfo['participant']
  Experiment info = {'participant': ''}
  Full-screen window = True
  Incomplete URL = https://du.sona-systems.com
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Use version = 2023.2.0
  Window size (pixels) = [1280, 1024]
  color = $[-1,-1,-1]
  expName = gprDigitSpan
  exportHTML = on Save
  keyboardBackend = ioHub
  runMode = 1
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Routines
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  Routine SpanGeneralInstructions
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    CodeComponent setUpTextFormatting_2
      Code Type = Auto->JS
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      Begin Experiment:
        instructionsTextHeight = 0.04;
        letterTextHeight = 0.1;
        wrap = 1.2
    TextComponent GenInsText
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        In this task you will be asked to memorize a series of numbers and recall them.

        You will do this twice, once recalling the numbers in the order as presented on the screen and once recalling the numbers in the reverse order as presented on the screen.

        There are 14 trials in each direction for a total of 28 trials.

        You will complete 2 practice sets prior to starting each round of this task.

        Press 'enter' to continue.
    KeyboardComponent movealong
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FSInstructions
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    TextComponent FSGenInsText
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        The practice for the forwards section of this task is up next.

        You will complete two practice trials, each with a list of 3 numbers.

        Type out your answer when "Recall" appears on the screen using the numbers at the top of the keyboard to type out the numbers in the order they were presented on the screen.

        DO NOT use spaces or any other symbols (ONLY enter numbers) when you type your answer, otherwise your answer will be counted as incorrect.

        For example, if the numbers displayed on the screen are 5 then 7, the correct response is 57.

        If you make a mistake you can use backspace to correct it.

        Feedback will be provided.

        Press 'enter' to begin the practice.
    KeyboardComponent startPractice
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ShowNumbersPractice
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    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        //console.log(digits)
      Begin Routine:
        #print(digits) # translated from js
    TextComponent fixation_2
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent pres_text_practice
      letterHeight = letterTextHeight
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digits)[DigitLoopPractice.thisN]
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  Routine RecallPractice
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    TextComponent recall_txtPractice
      letterHeight = instructionsTextHeight
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    TextboxComponent textboxPractice
      bold = False
      editable = True
      letterHeight = letterTextHeight
      size = (None, None)
      startVal [time (s)] = 0
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    ImageComponent cont_buttonPractice
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0
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    CodeComponent code_3practice
      Code Type = Auto->JS
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      Begin Routine:
        #win.mouseVisible = True
        #event.Mouse(visible=True)
      End Routine:
        #for r in range(len(digitsForTrial)):
        #    digitsForTrial[r] = str(digitsForTrial[r])

        #digitsForTrial = ''.join(digitsForTrial)

        #win.mouseVisible = False

        if textboxPractice.text == str(digits):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    MouseComponent mousePractice
      clickable = cont_buttonPractice
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0
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    CodeComponent JScodePractice
      Code Type = Both
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textboxPractice.refresh()
      Begin Routine:
        # translated from js
        # this is a temporary fix to allow editable textbox to be used on several trials
        #textboxPractice.refresh()
  Routine FeedbackPractice
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    TextComponent feedbac_textPractice
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine StartRealFS
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    TextComponent praccomplete
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        Practice complete!

        You are about to begin the forwards section of this task.

        You will start with a list of 3 numbers. If you are able to correctly recall the list of numbers, you will continue to larger lists.

        DO NOT use spaces or any other symbols (ONLY enter numbers) when you type your answer, otherwise your answer will be counted as incorrect.

        Press 'enter' to start the task.
    KeyboardComponent startFSreal
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine selectNumbers
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    CodeComponent selectNumbersFS
      Code Type = Both
      Begin Experiment:
        numbersToChoose = [1,2,3,4,5,6,7,8,9];
        minDigitFS = 3;
        maxDigitFS = 16;
        #minDigitBS = 2;
        #maxDigitBS = 15;
        nTrialsFS = 0;
        #nTrialsBS = 0;
        correct = [];
        incorrectCount = 0;
      Begin JS Experiment:
        var digitSpan, digitsForTrial, nTrialsFS, correctCount, incorrectCount;

        //nTrialsFS = 0;
      Begin JS Routine:
        //import * as random from 'random';
        var checkingNumbers, endN, singleNumber, startN, tmpFirst, tmpSecond, numbersToChoose, minDigitFS, maxDigitFS;

        numbersToChoose = [1, 2, 3, 4, 5, 6, 7, 8, 9];
        minDigitFS = 3;
        maxDigitFS = 16;
        //correctCount = [];
        //incorrectCount = 0;


        function random_item(items){
            return items[Math.floor(Math.random()*items.length)];
        }

        //nTrialsFS += 1;
        //nTrialsFS = nTrialsFS+1;

        nTrialsFS = trialsFS.thisN
        //console.log("nTrialsFS:", nTrialsFS)

        // make incorrect count 0 on the first trial
        if (nTrialsFS === 0){
            incorrectCount = 0;
        }

        if (correctCount === 0) {
            incorrectCount = incorrectCount + 1;
        }

        //if ((nTrialsFS === 1)) {
        if (nTrialsFS === 0) {
            digitSpan = minDigitFS;
        } else if (nTrialsFS !== 0) {
            if (correctCount ===1) {
                digitSpan = (digitSpan +1)
                incorrectCount = 0;
            } else if (correctCount === 0 && incorrectCount < 2){
                digitSpan = digitSpan
            } else if (correctCount === 0 && incorrectCount === 2){
                digitSpan = (digitSpan - 1);
                incorrectCount = 0;
            }
        }

        /*
        console.log("digit span:",digitSpan)
        console.log("correct count:", correctCount)
        console.log("incorrectCount:", incorrectCount)
        */

        if ((digitSpan < minDigitFS)) {
            digitSpan = minDigitFS;
        }

        digitsForTrial = [];
        while ((digitsForTrial.length < digitSpan)) {
            if ((digitSpan <= 9)) {
                singleNumber = random_item(numbersToChoose);
                if ((util.count(digitsForTrial, singleNumber) < 1)) {
                    digitsForTrial.push(singleNumber);
                }
            } else {
                if ((digitSpan > 9)) {
                    singleNumber = random_item(numbersToChoose);
                    if (((digitsForTrial.length < 9) && (util.count(digitsForTrial, singleNumber) === 0))) {
                        digitsForTrial.push(singleNumber);
                    }
                    if (((digitsForTrial.length >= 9) && (util.count(digitsForTrial, singleNumber) < 2))) {
                        digitsForTrial.push(singleNumber);
                    }
                }
            }
        }
        checkingNumbers = true;
        startN = 1;
        endN = (digitsForTrial.length - 1);
        while (checkingNumbers) {
            for (var n, _pj_c = 0, _pj_a = util.range(startN, endN), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                n = _pj_a[_pj_c];
                if (((digitsForTrial[n] === (digitsForTrial[(n - 1)] + 1)) && (digitsForTrial[n] === (digitsForTrial[(n + 1)] - 1)))) {
                    tmpFirst = digitsForTrial[n];
                    tmpSecond = digitsForTrial[(n - 1)];
                    digitsForTrial[n] = tmpSecond;
                    digitsForTrial[(n - 1)] = tmpFirst;
                }
                if (((digitsForTrial[n] === (digitsForTrial[(n - 1)] - 1)) && (digitsForTrial[n] === (digitsForTrial[(n + 1)] + 1)))) {
                    tmpFirst = digitsForTrial[n];
                    tmpSecond = digitsForTrial[(n - 1)];
                    digitsForTrial[n] = tmpSecond;
                    digitsForTrial[(n - 1)] = tmpFirst;
                }
            }
            checkingNumbers = false;
        }

        //console.log(digitSpan)
        //console.log(digitsForTrial)
      Begin Routine:
        import random

        nTrialsFS += 1;

        # set the digit span, always starts at 3 for nTrial =1
        # if correct, go up one
        # if incorrect (once) stay the same
        # if incorrect (twice) go down one
        if correct == 0:
            incorrectCount += 1

        if nTrialsFS ==1:
            digitSpan = minDigitFS
        else:
            if correct ==1:
                digitSpan = digitSpan + 1
                incorrectCount = 0;
            elif correct ==0 and incorrectCount <2:
                digitSpan = digitSpan
            elif correct ==0 and incorrectCount ==2:
                digitSpan = digitSpan-1
                incorrectCount = 0;

        if digitSpan < minDigitFS:
            digitSpan = minDigitFS

        digitsForTrial = [];

        while len(digitsForTrial) < digitSpan:
            if digitSpan <= 9:
                singleNumber = random.choice(numbersToChoose)
                if digitsForTrial.count(singleNumber) < 1:
                    digitsForTrial.append(singleNumber)
            elif digitSpan > 9:
                 singleNumber = random.choice(numbersToChoose)

                 if len(digitsForTrial) < 9 and digitsForTrial.count(singleNumber)==0:
                     digitsForTrial.append(singleNumber)

                 if len(digitsForTrial) >= 9 and digitsForTrial.count(singleNumber)<2:
                     digitsForTrial.append(singleNumber)

        # check that there is not more than two consecutive numbers (e.g. 1-2-3)
        checkingNumbers = True
        startN = 1
        endN = len(digitsForTrial)-1
        while checkingNumbers:
            for n in range(startN,endN):
                if digitsForTrial[n] == digitsForTrial[n-1] + 1 and digitsForTrial[n] == digitsForTrial[n+1] -1:
                    tmpFirst = digitsForTrial[n]
                    tmpSecond = digitsForTrial[n-1]
                    digitsForTrial[n] = tmpSecond
                    digitsForTrial[n-1] = tmpFirst

                if digitsForTrial[n] == digitsForTrial[n-1] - 1 and digitsForTrial[n] == digitsForTrial[n+1] +1:
                    tmpFirst = digitsForTrial[n]
                    tmpSecond = digitsForTrial[n-1]
                    digitsForTrial[n] = tmpSecond
                    digitsForTrial[n-1] = tmpFirst

            checkingNumbers = False
        # if there are three consecutive numbers, swap the first and second numbers in the series
  Routine ShowNumbers
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    CodeComponent getTmpNumberCodeFS
      Code Type = Both
      Begin JS Routine:
        var tmpNumber
        tmpNumber = digitsForTrial[digitLoop.thisN];
      Begin Routine:
        tmpNumber = digitsForTrial[digitLoop.thisN]
      End JS Routine:
        psychoJS.experiment.addData("digitsForTrial", digitsForTrial);
      End Routine:
        thisExp.addData("digitsForTrial",digitsForTrial)
    TextComponent fixation
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent presentation_text
      letterHeight = letterTextHeight
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $tmpNumber
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  Routine Recall
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    TextComponent recall_txt
      letterHeight = instructionsTextHeight
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = letterTextHeight
      size = (None, None)
      startVal [time (s)] = 0.0
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    ImageComponent cont_button
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Both
      End JS Routine:
        for (var r, _pj_c = 0, _pj_a = util.range(digitsForTrial.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            r = _pj_a[_pj_c];
            digitsForTrial[r] = digitsForTrial[r].toString();
        }
        digitsForTrial = digitsForTrial.join("");
        if ((textbox.text === digitsForTrial.toString())) {
            correctCount = 1;
            fbTxt = "Correct!";
        } else {
            correctCount = 0;
            fbTxt = "Incorrect";
        }
        psychoJS.experiment.addData("correct", correctCount);
      End Routine:
        for r in range(len(digitsForTrial)):
            digitsForTrial[r] = str(digitsForTrial[r])

        digitsForTrial = ''.join(digitsForTrial)

        if textbox.text == str(digitsForTrial):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    MouseComponent mouse_3
      clickable = cont_button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent JScode
      Code Type = Both
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
      Begin Routine:
        # translated from js
        # this is a temporary fix to allow editable textbox to be used on several trials
        #textboxPractice.refresh()
  Routine Feedback
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    TextComponent feedback_text
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine InstructionsBS
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    TextComponent BSGenInsText
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        The practice for the backwards section of this task is up next.

        You will complete two practice trials, each with a list of 2 numbers.

        Type out your answer when "Recall" appears on the screen using the numbers at the top of the keyboard to type out the numbers in the REVERSE order they were presented on the screen.

        For example, if the numbers presented are 6 then 2, your response should be 26.

        Please DO NOT use spaces or any other symbols (ONLY enter numbers) when you type your answer, otherwise your answer will be counted as incorrect.

        If you make a mistake you can use backspace to correct it.

        Feedback will be provided.

        Press 'enter' to begin the practice.
    KeyboardComponent startBSprac
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine showNumbersPracticeBS
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    TextComponent fixation_3
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent pres_text_practice_2
      letterHeight = letterTextHeight
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $str(digitsReverse)[digitLoopPracticeBS.thisN]
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  Routine recallPracticeBS
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    TextComponent recall_txtPractice_2
      letterHeight = instructionsTextHeight
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    TextboxComponent textboxPractice_2
      bold = False
      editable = True
      letterHeight = letterTextHeight
      size = (None, None)
      startVal [time (s)] = 0.0
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    ImageComponent cont_buttonPractice_2
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code_3practice_2
      Code Type = Auto->JS
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      End Routine:
        if textboxPractice_2.text == str(digitsReverseCorrAnswer):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    MouseComponent mousePractice_2
      clickable = cont_buttonPractice_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent JScodePractice_2
      Code Type = Both
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textboxPractice_2.refresh()
      Begin Routine:
        # translated from js
        # this is a temporary fix to allow editable textbox to be used on several trials
        #textboxPractice.refresh()
  Routine feedbackPracticeBS
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    TextComponent feedbac_textPractice_2
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine startRealBS
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    TextComponent praccompleteBS
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        Practice complete!

        You are about to begin the backwards section of this task.

        You will start with a list of 2 numbers. If you are able to correctly recall the list of numbers, you will continue to larger lists.

        DO NOT use spaces or any other symbols (ONLY enter numbers) when you type your answer, otherwise your answer will be counted as incorrect.

        Press 'enter' to start the task.
    KeyboardComponent startBSreal
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine selectNumbersBS
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    CodeComponent selectNumbersBScode
      Code Type = Both
      Begin Experiment:
        numbersToChoose = [1,2,3,4,5,6,7,8,9];
        minDigitBS = 2;
        maxDigitBS = 15;
        nTrialsBS = 0;
        correct = [];
        incorrectCount = 0;
      Begin JS Experiment:
        var nTrialsBS

        //nTrialsBS = 0;
      Begin JS Routine:
        //import * as random from 'random';
        var checkingNumbers,endN, singleNumber, startN, tmpFirst, tmpSecond, numbersToChoose, minDigitBS, maxDigitBS

        numbersToChoose = [1, 2, 3, 4, 5, 6, 7, 8, 9];
        minDigitBS = 2;
        maxDigitBS = 15;
        //correct = [];
        //incorrectCount = 0;

        function random_item(items){
            return items[Math.floor(Math.random()*items.length)];
        }



        //nTrialsBS += 1;
        nTrialsBS = trialsBS.thisN
        //console.log("nTrialsBS:", nTrialsBS)

        // reset incorrect count on the first trial
        if (nTrialsBS ===0) {
            incorrectCount = 0
            correctCount = Math.nan
        }

        if (correctCount === 0) {
            incorrectCount = incorrectCount + 1;
        }

        if (nTrialsBS === 0) {
            //correctCount = 0;
            digitSpan = minDigitBS;
        } else if (nTrialsBS !==0){
            if (correctCount ===1){
                digitSpan = (digitSpan + 1);
                incorrectCount = 0;
            } else if (correctCount === 0 && incorrectCount < 2) {
                digitSpan = digitSpan;
            } else if (correctCount === 0 && incorrectCount === 2) {
                digitSpan = (digitSpan - 1);
                incorrectCount = 0;
            }
        }

        /*
        console.log("digit span:",digitSpan)
        console.log("correct count:", correctCount)
        console.log("incorrectCount:", incorrectCount)
        */

        if (digitSpan < minDigitBS) {
            digitSpan = minDigitBS;
        }

        digitsForTrial = [];
        while ((digitsForTrial.length < digitSpan)) {
            if ((digitSpan <= 9)) {
                singleNumber = random_item(numbersToChoose);
                if ((util.count(digitsForTrial, singleNumber) < 1)) {
                    digitsForTrial.push(singleNumber);
                }
            } else {
                if ((digitSpan > 9)) {
                    singleNumber = random_item(numbersToChoose);
                    if (((digitsForTrial.length < 9) && (util.count(digitsForTrial, singleNumber) === 0))) {
                        digitsForTrial.push(singleNumber);
                    }
                    if (((digitsForTrial.length >= 9) && (util.count(digitsForTrial, singleNumber) < 2))) {
                        digitsForTrial.push(singleNumber);
                    }
                }
            }
        }
        checkingNumbers = true;
        startN = 1;
        endN = (digitsForTrial.length - 1);
        while (checkingNumbers) {
            for (var n, _pj_c = 0, _pj_a = util.range(startN, endN), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
                n = _pj_a[_pj_c];
                if (((digitsForTrial[n] === (digitsForTrial[(n - 1)] + 1)) && (digitsForTrial[n] === (digitsForTrial[(n + 1)] - 1)))) {
                    tmpFirst = digitsForTrial[n];
                    tmpSecond = digitsForTrial[(n - 1)];
                    digitsForTrial[n] = tmpSecond;
                    digitsForTrial[(n - 1)] = tmpFirst;
                }
                if (((digitsForTrial[n] === (digitsForTrial[(n - 1)] - 1)) && (digitsForTrial[n] === (digitsForTrial[(n + 1)] + 1)))) {
                    tmpFirst = digitsForTrial[n];
                    tmpSecond = digitsForTrial[(n - 1)];
                    digitsForTrial[n] = tmpSecond;
                    digitsForTrial[(n - 1)] = tmpFirst;
                }
            }
            checkingNumbers = false;
        }

        //console.log("digitSpan:", digitSpan)
        //console.log("digitSpan:", digitsForTrial)
      Begin Routine:
        import random

        nTrialsBS += 1;

        # set the digit span, always starts at 3 for nTrial =1
        # if correct, go up one
        # if incorrect (once) stay the same
        # if incorrect (twice) go down one
        if correct == 0:
            incorrectCount += 1

        if nTrialsBS ==1:
            correct = [];
            digitSpan = minDigitBS
        else:
            if correct ==1:
                digitSpan = digitSpan + 1
                incorrectCount = 0;
            elif correct ==0 and incorrectCount <2:
                digitSpan = digitSpan
            elif correct ==0 and incorrectCount ==2:
                digitSpan = digitSpan-1
                incorrectCount = 0;

        if digitSpan < minDigitBS:
            digitSpan = minDigitBS

        digitsForTrial = [];

        while len(digitsForTrial) < digitSpan:
            if digitSpan <= 9:
                singleNumber = random.choice(numbersToChoose)
                if digitsForTrial.count(singleNumber) < 1:
                    digitsForTrial.append(singleNumber)
            elif digitSpan > 9:
                 singleNumber = random.choice(numbersToChoose)

                 if len(digitsForTrial) < 9 and digitsForTrial.count(singleNumber)==0:
                     digitsForTrial.append(singleNumber)

                 if len(digitsForTrial) >= 9 and digitsForTrial.count(singleNumber)<2:
                     digitsForTrial.append(singleNumber)

        # check that there is not more than two consecutive numbers (e.g. 1-2-3)
        checkingNumbers = True
        startN = 1
        endN = len(digitsForTrial)-1
        while checkingNumbers:
            for n in range(startN,endN):
                if digitsForTrial[n] == digitsForTrial[n-1] + 1 and digitsForTrial[n] == digitsForTrial[n+1] -1:
                    tmpFirst = digitsForTrial[n]
                    tmpSecond = digitsForTrial[n-1]
                    digitsForTrial[n] = tmpSecond
                    digitsForTrial[n-1] = tmpFirst

                if digitsForTrial[n] == digitsForTrial[n-1] - 1 and digitsForTrial[n] == digitsForTrial[n+1] +1:
                    tmpFirst = digitsForTrial[n]
                    tmpSecond = digitsForTrial[n-1]
                    digitsForTrial[n] = tmpSecond
                    digitsForTrial[n-1] = tmpFirst

            checkingNumbers = False
        # if there are three consecutive numbers, swap the first and second numbers in the series
  Routine showNumbersBS
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    CodeComponent getTmpNumberCodeBS
      Code Type = Auto->JS
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      Begin Routine:
        tmpNumber = digitsForTrial[digitLoopBS.thisN]
      End Routine:
        thisExp.addData("digitsForTrial",digitsForTrial)
    TextComponent fixationBS
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent presentation_textBS
      letterHeight = letterTextHeight
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1
      text [set every repeat] = $tmpNumber
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
  Routine RecallBS
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    TextComponent recall_txtBS
      letterHeight = instructionsTextHeight
      pos = (0, 0.25)
      startVal [time (s)] = 0
      text = Recall
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    TextboxComponent textboxBS
      bold = False
      editable = True
      letterHeight = letterTextHeight
      size = (None, None)
      startVal [time (s)] = 0.0
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    ImageComponent cont_buttonBS
      image = continue.png
      pos = (0, -.4)
      size = (0.3, 0.07)
      startVal [time (s)] = 0.0
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    CodeComponent code_3BS
      Code Type = Both
      End JS Routine:
        function reversed(x) {
            var revList;
            revList = [];
            for (var i = 0, _pj_a = x.length; (i < _pj_a); i += 1) {
                revList.push(x[((x.length - 1) - i)]);
            }
            return revList;
        }

        digitsForTrial = reversed(digitsForTrial)
        //console.log("reversed digits:", digitsForTrial)

        for (var r, _pj_c = 0, _pj_a = util.range(digitsForTrial.length), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            r = _pj_a[_pj_c];
            digitsForTrial[r] = digitsForTrial[r].toString();
        }
        digitsForTrial = digitsForTrial.join("");
        if ((textboxBS.text === digitsForTrial.toString())) {
            correctCount = 1;
            fbTxt = "Correct!";
        } else {
            correctCount = 0;
            fbTxt = "Incorrect";
        }
        psychoJS.experiment.addData("correct", correctCount);
      End Routine:
        digitsForTrial.reverse(); # reverse order for backward span

        for r in range(len(digitsForTrial)):
            digitsForTrial[r] = str(digitsForTrial[r])

        digitsForTrial = ''.join(digitsForTrial)

        if textboxBS.text == str(digitsForTrial):
            correct = 1
            fbTxt = 'Correct!'
        else:
            correct = 0
            fbTxt = 'Incorrect'
        thisExp.addData('correct', correct)
    MouseComponent mouseBS
      clickable = cont_buttonBS
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent JScode_BS
      Code Type = Both
      Begin JS Routine:
        // this is a temporary fix to allow editable textbox to be used on several trials
        textbox.refresh()
      Begin Routine:
        # translated from js
        # this is a temporary fix to allow editable textbox to be used on several trials
        #textboxPractice.refresh()
  Routine FeedbackBS
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    TextComponent feedback_textBS
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $fbTxt
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  Routine END
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    TextComponent ThankYou
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        Thank you! You have sucessfully completed the second portion of this study.

        Please press the white call button to bring the experimenter back into the room.
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
  Routine settingUp
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    CodeComponent code
      Code Type = Both
      Before Experiment:
        # translated from js

        #from psychopy import visual, core, event
        #
        #expName = "Your Experiment Name"  # Replace with your experiment name
        #expInfo = {"participant": "", "session": ""}  # Replace with your experiment info
        #
        #resources = [
        #    {'name': 'digitSpanTrialNumber.xlsx', 'path': 'digitSpanTrialNumber.xlsx'},
        #    {'name': 'CGT-choice-set.csv', 'path': 'CGT-choice-set.csv'},
        #    {'name': 'cgtRDMPractice.xlsx', 'path': 'cgtRDMPractice.xlsx'},
        #    {'name': 'continue.png', 'path': 'continue.png'},
        #    {'name': 'digitSpanPractice.xlsx', 'path': 'digitSpanPractice.xlsx'},
        #    # {'name': 'trialTypes_B.xls', 'path': 'http://a.website.org/a.path/trialTypes_B.xls'}
        #]

        # Start the experiment
        # Note: You may need to implement the actual start logic based on your requirements
      Before JS Experiment:
        psychoJS.start({
          expName,
          expInfo,
          resources: [
            // relative path to index.html
            { name: 'digitSpanTrialNumber.xlsx', path: 'digitSpanTrialNumber.xlsx' },
            { name: 'CGT-choice-set.csv', path: 'CGT-choice-set.csv' },
            { name: 'cgtRDMPractice.xlsx', path: 'cgtRDMPractice.xlsx' },
            { name: 'continue.png', path: 'continue.png' },
            { name: 'digitSpanPractice.xlsx', path: 'digitSpanPractice.xlsx' },
            // absolute path:
            //{ name: 'trialTypes_B.xls', path: 'http://a.website.org/a.path/trialTypes_B.xls' }
          ]
        });
      Begin Experiment:
        instructionsTextHeight = .05
        lettersTextHeight = .1
        wrap = 1.2
      Begin JS Experiment:
        //instructionsTextHeight = 0.05;
        //lettersTextHeight = 0.1;
        //wrap = 1.5;
        //
        //
        //var initITIstatic
        //var initITIdynamic
      End JS Routine:
        //function shuffle(array) {
        //  let currentIndex = array.length,  randomIndex;
        //
        //  // While there remain elements to shuffle.
        //  while (currentIndex != 0) {
        //
        //    // Pick a remaining element.
        //    randomIndex = Math.floor(Math.random() * currentIndex);
        //    currentIndex--;
        //
        //    // And swap it with the current element.
        //    [array[currentIndex], array[randomIndex]] = [
        //      array[randomIndex], array[currentIndex]];
        //  }
        //
        //  return array;
        //}
        //
        //// initialize ITIs
        //initITIstatic = Array(25).fill([1, 1.5]).flat();
        //initITIdynamic = Array(60).fill([1, 1.5]).flat();
        //
        //// shuffle the ITIs using the function above
        //initITIstatic = shuffle(initITIstatic);
        //initITIdynamic = shuffle(initITIdynamic);
        //
        //// save the ITIs
        //psychoJS.experiment.addData('initITIstatic', initITIstatic)
        //psychoJS.experiment.addData('initITIdynamic', initITIdynamic)
        //
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  Routine FStoBStransition
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    TextComponent roundTransition
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The first round of the number task is complete!

        Press "enter" to continue to the last round.
    KeyboardComponent moveToBS
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SpanReminder1
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    TextComponent Reminder1
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        Your performance on this task does not affect your compensation.

        This task is supposed to be challenging - you are not expected to nor do you need to remember everything or get everything correct!

        Press 'enter' to continue.
    KeyboardComponent movealong2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine SpanReminder2
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    TextComponent Reminder2
      letterHeight = instructionsTextHeight
      startVal [time (s)] = 0.0
      wrapWidth = wrap
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      text:
        We are interested in how many digits you can reliably and truthfully recall.

        Please do your best, and do not cheat (e.g. write down or photograph digits). Thank you for completing this task honestly!

        Press 'enter' to continue.
    KeyboardComponent movealong3
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine settingUp
  Routine SpanGeneralInstructions
  Routine SpanReminder1
  Routine SpanReminder2
  Routine FSInstructions
  LoopInitiator trialFSPractice loopType="TrialHandler"
    conditionsFile = digitSpanPractice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'digitSpanForward': 3, 'digits': 342, 'digitsReverse': 24, 'digitSpanReverse': 2, 'digitsReverseCorrAnswer': 42},
      {'digitSpanForward': 3, 'digits': 937, 'digitsReverse': 73, 'digitSpanReverse': 2, 'digitsReverseCorrAnswer': 37}]
    LoopInitiator DigitLoopPractice loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 3
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      Routine ShowNumbersPractice
    LoopTerminator DigitLoopPractice
    Routine RecallPractice
    Routine FeedbackPractice
  LoopTerminator trialFSPractice
  Routine StartRealFS
  LoopInitiator trialsFS loopType="TrialHandler"
    conditionsFile = digitSpanTrialNumber.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trialNumber': 1},
      {'trialNumber': 2},
      {'trialNumber': 3},
      {'trialNumber': 4},
      {'trialNumber': 5},
      {'trialNumber': 6},
      {'trialNumber': 7},
      {'trialNumber': 8},
      {'trialNumber': 9},
      {'trialNumber': 10},
      {'trialNumber': 11},
      {'trialNumber': 12},
      {'trialNumber': 13},
      {'trialNumber': 14}]
    Routine selectNumbers
    LoopInitiator digitLoop loopType="TrialHandler"
      loopType = random
      nReps = digitSpan
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      Routine ShowNumbers
    LoopTerminator digitLoop
    Routine Recall
    Routine Feedback
  LoopTerminator trialsFS
  Routine FStoBStransition
  Routine InstructionsBS
  LoopInitiator trialsPracticeBS loopType="TrialHandler"
    conditionsFile = digitSpanPractice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'digitSpanForward': 3, 'digits': 342, 'digitsReverse': 24, 'digitSpanReverse': 2, 'digitsReverseCorrAnswer': 42},
      {'digitSpanForward': 3, 'digits': 937, 'digitsReverse': 73, 'digitSpanReverse': 2, 'digitsReverseCorrAnswer': 37}]
    LoopInitiator digitLoopPracticeBS loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 2
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      Routine showNumbersPracticeBS
    LoopTerminator digitLoopPracticeBS
    Routine recallPracticeBS
    Routine feedbackPracticeBS
  LoopTerminator trialsPracticeBS
  Routine startRealBS
  LoopInitiator trialsBS loopType="TrialHandler"
    conditionsFile = digitSpanTrialNumber.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trialNumber': 1},
      {'trialNumber': 2},
      {'trialNumber': 3},
      {'trialNumber': 4},
      {'trialNumber': 5},
      {'trialNumber': 6},
      {'trialNumber': 7},
      {'trialNumber': 8},
      {'trialNumber': 9},
      {'trialNumber': 10},
      {'trialNumber': 11},
      {'trialNumber': 12},
      {'trialNumber': 13},
      {'trialNumber': 14}]
    Routine selectNumbersBS
    LoopInitiator digitLoopBS loopType="TrialHandler"
      loopType = random
      nReps = digitSpan
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      Routine showNumbersBS
    LoopTerminator digitLoopBS
    Routine RecallBS
    Routine FeedbackBS
  LoopTerminator trialsBS
  Routine END
